open('(Image_Path)');
run('Duplicate...', ' ');
selectWindow('(Image_Name)');
run('Trainable Weka Segmentation');
wait(10000);
selectWindow('Trainable Weka Segmentation v3.2.23');
wait(10000);
call('trainableSegmentation.Weka_Segmentation.loadClassifier', 'C:/Cells-master/classifier4.model');
wait(15000);call('trainableSegmentation.Weka_Segmentation.loadData', 'C:/Cells-master/data3.arff');
wait(15000);call('trainableSegmentation.Weka_Segmentation.getProbability');
wait(15000);selectWindow('Probability maps');
setThreshold(0.99, 1.0000);
setOption('BlackBackground', true);
run('Convert to Mask', 'method=Default background=Dark calculate black');
run('Watershed', 'slice');
run('Set Measurements...', 'area perimeter bounding shape redirect=None decimal=3');
run('Analyze Particles...', 'size=5-Infinity show=Outlines display exclude clear add in_situ slice');
selectWindow('(Image_name)-1.tif');
roiManager('Show All');
run('Flatten');
run('Save', 'save=[C:/Cells-master/(Image_name)_ROI.tif]');
selectImage(nImages);
close();
run('Quit');
